PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant': '99'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(1.0000, 1.0000, 1.0000)
  expName = FishGame
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine practice
    TextComponent prac_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press Space
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent pond
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine option_fish
    CodeComponent mainCode
      Code Type = Auto->JS
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      Before Experiment:
        import random
        #stimuli locations
        pond_loc = [0,0.25]
        boy_loc = [0.75,-0.30]
        arrow_loc = [0.50,-0.30]
        fish_loc = [[0.2,-0.30],[0,-0.30],[-0.2,-0.30],[-0.4,-0.30],[-0.6,-0.30]]
        box_loc = [[-0.32,0.25],[0,0.25],[0.32,0.25]]

        #stimuli onset time
        fish_interval = [0.5,1.0,1.5]
        block_correct = []
        msg='doh!'#if this comes up we forgot to update the msg!

        #condition folder directory
        conditionfolder = ''
      Begin Experiment:
        #if expInfo.get('condition') == '1':
        #    conditionfolder = '1condition/Blocks.xlsx'
        #
        #if expInfo.get('condition') == '2':
        #    conditionfolder = '2condition/Blocks.xlsx'
      Begin Routine:
        fish_int = random.choice(fish_interval)

        endMsg = " "
        endTrial = False
      Each Frame:
        if t > 5.0 and len(fish_key_button.getKeys()) == 0:
            endMsg = 'Too slow'
            endTrial = True
            if t > 5.2 and len(fish_key_button.getKeys()) == 0:
                continueRoutine = False
    TextComponent pond_label
      color = black
      letterHeight = 0.1
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $endMsg
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    ImageComponent jars
      color = $(1.0000, 1.0000, 1.0000)
      image = stimuli/jars.PNG
      interpolate = nearest
      pos = pond_loc
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent arrow
      image = stimuli/arrow.png
      pos = arrow_loc
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent boy
      image = stimuli\clear-jar.PNG
      pos = boy_loc
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent F1
      image [set every repeat] = $fish1
      pos = fish_loc[0]
      size = (0.15, 0.15)
      startVal [time (s)] = fish_int
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    ImageComponent F2
      image [set every repeat] = $fish2
      pos = fish_loc[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent F3
      image [set every repeat] = $fish3
      pos = fish_loc[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent F4
      image [set every repeat] = $fish4
      pos = fish_loc[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent F5
      image [set every repeat] = $fish5
      pos = fish_loc[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent box_outline
      fillColor = none
      lineColor = black
      lineWidth = 5
      pos = fish_loc[0]
      saveStartStop = False
      shape = rectangle
      size = (0.20,0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent box_show
      fillColor = black
      lineColor = black
      lineWidth = 5
      pos = fish_loc[0]
      shape = rectangle
      size = (0.20,0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fish_int
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    KeyboardComponent fish_key_button
      allowedKeys = 'left','up','right'
      forceEndRoutine = True
      startVal [time (s)] = fish_int
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  Routine response_fish
    CodeComponent boxChange
      Code Type = Auto->JS
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      Begin Routine:
        if endTrial:
            continueRoutine = False
        else:
            if fish_key_button.keys == '1' or fish_key_button.keys == 'left':
                time = core.getTime()
                boxB.lineColor = 'black'
            elif fish_key_button.keys == '2' or fish_key_button.keys == 'up':
                time = core.getTime()
                boxY.lineColor = 'black'
            elif fish_key_button.keys == '3' or fish_key_button.keys == 'right':
                time = core.getTime()
                boxG.lineColor = 'black'

            if fish_key_button.keys == str(pond2) or fish_key_button.keys == pond3:
                nCorr += 1
                thisExp.addData('fish_key.corr', 1)
            else:
                thisExp.addData('fish_key.corr', 0)
    ImageComponent jars2
      image = stimuli\jars.PNG
      interpolate = nearest
      pos = pond_loc
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent arrow2
      image = stimuli\arrow.png
      pos = arrow_loc
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent boy2
      image = stimuli\clear-jar.PNG
      pos = boy_loc 
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent f1
      image [set every repeat] = $fish1
      pos = fish_loc[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent f2
      image [set every repeat] = $fish2
      pos = fish_loc[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent f3
      image [set every repeat] = $fish3
      pos = fish_loc[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent f4
      image [set every repeat] = $fish4
      pos = fish_loc[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent f5
      image [set every repeat] = $fish5
      pos = fish_loc[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent boxB
      fillColor = none
      lineColor = none
      lineWidth = 5
      pos = box_loc[0]
      saveStartStop = False
      shape = rectangle
      size = (0.30, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent boxY
      fillColor = none
      lineColor = none
      lineWidth = 5
      pos = box_loc[1]
      saveStartStop = False
      shape = rectangle
      size = (0.30, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent boxG
      fillColor = none
      lineColor = none
      lineWidth = 5
      pos = box_loc[2]
      saveStartStop = False
      shape = rectangle
      size = (0.30, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent box_outline2
      fillColor = black
      lineColor = black
      lineWidth = 5
      pos = fish_loc[0]
      saveStartStop = False
      shape = rectangle
      size = (0.20,0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent boxClear
      Code Type = Auto->JS
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      End Routine:
        boxB.lineColor = 'none'
        boxY.lineColor = 'none'
        boxG.lineColor = 'none'

        thisExp.addData('fish_interval', fish_int)
        thisExp.addData('key_time', time)
  Routine reward
    TextComponent reward_txt
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you!
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    CodeComponent reward_pay
      Code Type = Auto->JS
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      End Experiment:
        final_pay = randchoice(range(len(block_correct)))
        blockID = final_pay + 1

        #print("correct per block", block_correct)
        #print('block number: ', blockID)
        #print('You earned: ', block_correct[final_pay])
        thisExp.addData('reward_block_chosen', blockID)
  Routine option_practice
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        fish_int = random.choice(fish_interval)

        endMsg = " "
        endTrial = False
      Each Frame:
        if t > 5.0 and len(key_resp_2.getKeys()) == 0:
            endMsg = 'Too slow'
            endTrial = True
            if t > 5.5 and len(key_resp_2.getKeys()) == 0:
                continueRoutine = False
    TextComponent pond_label_2
      color = black
      letterHeight = 0.1
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $endMsg
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    ImageComponent jars_2
      image = stimuli/jars.PNG
      interpolate = nearest
      pos = pond_loc
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent arrow_2
      image = stimuli/arrow.png
      pos = arrow_loc
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent boy_2
      image = stimuli\clear-jar.PNG
      pos = boy_loc
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent F1_2
      image [set every repeat] = $fish1_p
      pos = fish_loc[0]
      size = (0.15, 0.15)
      startVal [time (s)] = fish_int
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    ImageComponent F2_2
      image [set every repeat] = $fish2_p
      pos = fish_loc[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent F3_2
      image [set every repeat] = $fish3_p
      pos = fish_loc[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent F4_2
      image [set every repeat] = $fish4_p
      pos = fish_loc[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent F5_2
      image [set every repeat] = $fish5_p
      pos = fish_loc[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent box_outline_2
      fillColor = none
      lineColor = black
      lineWidth = 5
      pos = fish_loc[0]
      saveStartStop = False
      shape = rectangle
      size = (0.20,0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent box_show_2
      fillColor = black
      lineColor = black
      lineWidth = 5
      pos = fish_loc[0]
      shape = rectangle
      size = (0.20,0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fish_int
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','up','right'
      forceEndRoutine = True
      startVal [time (s)] = fish_int
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  Routine response_practice
    CodeComponent boxChange_2
      Code Type = Auto->JS
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      Begin Routine:
        #thisExp.addData('fish_present', fish_present)
        if endTrial:
            continueRoutine = False
        else:
            if key_resp_2.keys == '1' or key_resp_2.keys == 'left':
                time = core.getTime()
                boxB_2.lineColor = 'black'
            elif key_resp_2.keys == '2' or key_resp_2.keys == 'up':
                time = core.getTime()
                boxY_2.lineColor = 'black'
            elif key_resp_2.keys == '3' or key_resp_2.keys == 'right':
                time = core.getTime()
                boxG_2.lineColor = 'black'

            #need to update exel for check correct
            if key_resp_2.keys == str(pond_p2) or key_resp_2.keys == pond_p3: #add key compare
                practice_msg = 'Correct!'
                thisExp.addData('fish_key_2.corr', 1)
            else:
                practice_msg = 'Oops! Wrong pond.'
                thisExp.addData('fish_key_2.corr', 0)
    TextComponent pond_label2_2
      color = black
      letterHeight = 0.1
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $practice_msg
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    ImageComponent jars2_2
      image = stimuli\jars.PNG
      interpolate = nearest
      pos = pond_loc
      saveStartStop = False
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent arrow2_2
      image = stimuli\arrow.png
      pos = arrow_loc
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent boy2_2
      image = stimuli\clear-jar.PNG
      pos = boy_loc 
      saveStartStop = False
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent f1_2
      image [set every repeat] = $fish1_p
      pos = fish_loc[0]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent f2_2
      image [set every repeat] = $fish2_p
      pos = fish_loc[1]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent f3_2
      image [set every repeat] = $fish3_p
      pos = fish_loc[2]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent f4_2
      image [set every repeat] = $fish4_p
      pos = fish_loc[3]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent f5_2
      image [set every repeat] = $fish5_p
      pos = fish_loc[4]
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    PolygonComponent boxB_2
      fillColor = none
      lineColor = none
      lineWidth = 5
      pos = box_loc[0]
      saveStartStop = False
      shape = rectangle
      size = (0.30, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    PolygonComponent boxY_2
      fillColor = none
      lineColor = none
      lineWidth = 5
      pos = box_loc[1]
      saveStartStop = False
      shape = rectangle
      size = (0.30, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    PolygonComponent boxG_2
      fillColor = none
      lineColor = none
      lineWidth = 5
      pos = box_loc[2]
      saveStartStop = False
      shape = rectangle
      size = (0.30, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    PolygonComponent box_outline2_2
      fillColor = black
      lineColor = black
      lineWidth = 5
      pos = fish_loc[0]
      saveStartStop = False
      shape = rectangle
      size = (0.20,0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    CodeComponent boxClear_2
      Code Type = Auto->JS
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      End Routine:
        boxB_2.lineColor = 'none'
        boxY_2.lineColor = 'none'
        boxG_2.lineColor = 'none'

        #thisExp.addData('fish_interval', fish_int)
        #thisExp.addData('key_time', time)
  Routine ins2
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        A correct guess is rewarded with \$0.50, while an incorrect guess earns \$0.

        At the end of the game, you will receive the total bonus from one randomly selected session. The maximum bonus you can receive from this game is \$7.50, if you guess correctly for all trials.

        Press any key to continue
    KeyboardComponent ins2_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent inst2_image
      image = stimuli/instruction_image.png
      pos = (0, 0.25)
      size = (0.6, 0.35)
      startVal [time (s)] = 0.0
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  Routine ins3
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        Press LEFT, UP or RIGHT arrows to select your pond.

        The game will start with a quick practice. During the practice, you will see whether you chose the right pond or not. But during the actual game, you will not get this feedback. The game takes approximately 10 minutes to complete.

        Press any key to start the practice
    KeyboardComponent ins3_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent inst3_image
      image = stimuli/instruction_image.png
      pos = (0, 0.25)
      size = (0.6, 0.35)
      startVal [time (s)] = 0.0
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  Routine reward_reset
    CodeComponent rewardReset
      Code Type = Auto->JS
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      Begin Routine:
        nCorr = 0
  Routine wait
    TextComponent Begin_txt
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You have successfully completed the practice.

        Now you are ready to start the game.

        Press SPACE key to continue.
    KeyboardComponent ExpStart_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_break
    CodeComponent reward_list
      Code Type = Auto->JS
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      Begin Routine:
        block_correct.append(nCorr)
    TextComponent breakStart_txt
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        End of the day.

        New day starts soon.
  Routine ins1
    TextComponent text_1a
      color = black
      letterHeight = 0.035
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The Fishing Game

        Imagine a boy that goes fishing for 6 days. There are three ponds, each containing fish of different colors: blue, yellow, and green. In each pond the majority of the fish are of a single color.
    KeyboardComponent ins1_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent ins1_image
      image = stimuli/instruction_image.png
      pos = (0, 0.05)
      size = (0.6, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_1b
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Each day, the boy catches 15 fish. He will show you the fish he catches one by one, shown in the black square. Each turn, you will guess from which pond he is fishing.

        The boy will pick a different pond at the beginning of a new day, and he may or may not change ponds within the same day.

        Press any key to continue
  Routine instruct_video
    MovieComponent ins_video
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/Which Pond Tutorial Video_FINAL_3.1.23.mp4
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine instruct_video
  Routine ins1
  Routine ins2
  Routine ins3
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = 1condition/practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial': 1, 'fish1_p': 'stimuli/bead_y.PNG', 'fish2_p': 'stimuli/blank.JPG', 'fish3_p': 'stimuli/blank.JPG', 'fish4_p': 'stimuli/blank.JPG', 'fish5_p': 'stimuli/blank.JPG', 'pond_p': 1, 'pond_p2': 2, 'pond_p3': 'up'},
      {'trial': 2, 'fish1_p': 'stimuli/bead_y.PNG', 'fish2_p': 'stimuli/bead_y.PNG', 'fish3_p': 'stimuli/blank.JPG', 'fish4_p': 'stimuli/blank.JPG', 'fish5_p': 'stimuli/blank.JPG', 'pond_p': 1, 'pond_p2': 2, 'pond_p3': 'up'},
      {'trial': 3, 'fish1_p': 'stimuli/bead_y.PNG', 'fish2_p': 'stimuli/bead_y.PNG', 'fish3_p': 'stimuli/bead_y.PNG', 'fish4_p': 'stimuli/blank.JPG', 'fish5_p': 'stimuli/blank.JPG', 'pond_p': 1, 'pond_p2': 2, 'pond_p3': 'up'},
      {'trial': 4, 'fish1_p': 'stimuli/bead_g.PNG', 'fish2_p': 'stimuli/bead_y.PNG', 'fish3_p': 'stimuli/bead_y.PNG', 'fish4_p': 'stimuli/bead_y.PNG', 'fish5_p': 'stimuli/blank.JPG', 'pond_p': 1, 'pond_p2': 2, 'pond_p3': 'up'},
      {'trial': 5, 'fish1_p': 'stimuli/bead_y.PNG', 'fish2_p': 'stimuli/bead_g.PNG', 'fish3_p': 'stimuli/bead_y.PNG', 'fish4_p': 'stimuli/bead_y.PNG', 'fish5_p': 'stimuli/bead_y.PNG', 'pond_p': 1, 'pond_p2': 2, 'pond_p3': 'up'},
      {'trial': 6, 'fish1_p': 'stimuli/bead_y.PNG', 'fish2_p': 'stimuli/bead_y.PNG', 'fish3_p': 'stimuli/bead_g.PNG', 'fish4_p': 'stimuli/bead_y.PNG', 'fish5_p': 'stimuli/bead_y.PNG', 'pond_p': 1, 'pond_p2': 2, 'pond_p3': 'up'}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
    Routine option_practice
    Routine response_practice
  LoopTerminator prac_trials
  Routine wait
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = 1condition\Blocks.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'condsFile': '1condition\\trialsB1.xlsx', 'readyMsg': 'C1 B1'},
      {'condsFile': '1condition\\trialsB2.xlsx', 'readyMsg': 'C1 B2'},
      {'condsFile': '1condition\\trialsB3.xlsx', 'readyMsg': 'C1 B3'},
      {'condsFile': '1condition\\trialsB4.xlsx', 'readyMsg': 'C1 B4'},
      {'condsFile': '1condition\\trialsB5.xlsx', 'readyMsg': 'C1 B5'}]
    Routine reward_reset
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine option_fish
      Routine response_fish
    LoopTerminator trials
    Routine block_break
  LoopTerminator block
  Routine reward
